PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = pix
  Window size (pixels) = [2560, 1440]
  expName = gaze_contingent_demo
  eyetracker = Pupil Labs (Neon)
  keyboardBackend = ioHub
  plCompanionAddress = neon.local
  plCompanionPort = 8080
  plCompanionRecordingEnabled = False
  plConfidenceThreshold = 0.6
  plPupilCaptureRecordingEnabled = True
  plPupilRemoteAddress = 127.0.0.1
  plPupilRemotePort = 50020
  plPupilRemoteTimeoutMs = 1000
  plPupillometryOnly = False
  plSurfaceName = psychopy_iohub_surface
  runMode = 1
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Routines
  Routine Cleanup
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    EyetrackerRecordComponent StopRecording
      actionType = Start and Stop
      disabled = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      syncScreenRefresh = False
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  Routine Init
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    EyetrackerRecordComponent Start_Recording
      actionType = Start Only
      disabled = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Trial
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import random

        tag_size = 200
        target_size = 150

        def random_position():
            """ Generates a random x,y position for the
                  center of a target such that no part of
                  the target will ever overlap a corner tag
            """
            return (
                (random.random()-0.5) * (win.size[0] - target_size - 2*tag_size),
                (random.random()-0.5) * (win.size[1] - target_size - 2*tag_size),
            )
    PolygonComponent distractor_00
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos = random_position()
      shape = circle
      size = target_size, target_size
      startVal [time (s)] = 1
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    PolygonComponent distractor_01
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos [set every repeat] = random_position()
      shape = circle
      size = target_size, target_size
      startVal [time (s)] = 1
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    PolygonComponent distractor_02
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos [set every repeat] = random_position()
      shape = circle
      size = target_size, target_size
      startVal [time (s)] = 1
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    PolygonComponent target
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      pos [set every repeat] = random_position()
      shape = circle
      size = target_size, target_size
      startVal [time (s)] = 1
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 0.5
      nVertices = 4
      ori = 0
      pos [set every repeat] = target.pos
      save = every look
      shape = circle
      size = target_size, target_size
      startVal [time (s)] = 1
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent gaze_indicator
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      opacity = .5
      pos [set every frame] = eyetracker.getPosition()
      shape = circle
      size = 32, 32
      startVal [time (s)] = 0
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    UnknownPluginComponent tag_0 plugin="psychopy-eyetracker-pupil-labs"
      anchor = top-left
      contrast = 1
      marker_id = 0
      pos = (-win.size[0]/2, win.size[1]/2)
      size = tag_size, tag_size
      startVal [time (s)] = 0
      syncScreenRefresh = True
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    UnknownPluginComponent tag_1 plugin="psychopy-eyetracker-pupil-labs"
      anchor = top-right
      contrast = 1
      marker_id = 1
      pos = (win.size[0]/2, win.size[1]/2)
      size = tag_size, tag_size
      startVal [time (s)] = 0
      syncScreenRefresh = True
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    UnknownPluginComponent tag_2 plugin="psychopy-eyetracker-pupil-labs"
      anchor = bottom-right
      contrast = 1
      marker_id = 2
      pos = (win.size[0]/2, -win.size[1]/2)
      size = tag_size, tag_size
      startVal [time (s)] = 0
      syncScreenRefresh = True
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    UnknownPluginComponent tag_3 plugin="psychopy-eyetracker-pupil-labs"
      anchor = bottom-left
      contrast = 1
      marker_id = 3
      pos = (-win.size[0]/2, -win.size[1]/2)
      size = tag_size, tag_size
      startVal [time (s)] = 0
      syncScreenRefresh = True
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  Routine Pre_trial_Fixate
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    PolygonComponent Fixation_Cross
      fillColor = white
      shape = cross
      size = 48, 48
      startVal [time (s)] = 1
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    RegionOfInterestComponent Fixation_AOI
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 0.5
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = circle
      size = 100, 100
      startVal [time (s)] = 1
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent gaze_indicator_pre
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      opacity = .5
      pos [set every frame] = eyetracker.getPosition()
      shape = circle
      size = 32, 32
      startVal [time (s)] = 0
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    UnknownPluginComponent tag_0_pre
      anchor = top-left
      contrast = 1
      marker_id = 0
      pos = (-win.size[0]/2, win.size[1]/2)
      size = tag_size, tag_size
      startVal [time (s)] = 0
      syncScreenRefresh = True
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    UnknownPluginComponent tag_1_pre
      anchor = top-right
      contrast = 1
      marker_id = 1
      pos = (win.size[0]/2, win.size[1]/2)
      size = tag_size, tag_size
      startVal [time (s)] = 0
      syncScreenRefresh = True
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    UnknownPluginComponent tag_2_pre
      anchor = bottom-right
      contrast = 1
      marker_id = 2
      pos = (win.size[0]/2, -win.size[1]/2)
      size = tag_size, tag_size
      startVal [time (s)] = 0
      syncScreenRefresh = True
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    UnknownPluginComponent tag_3_pre
      anchor = bottom-left
      contrast = 1
      marker_id = 3
      pos = (-win.size[0]/2, -win.size[1]/2)
      size = tag_size, tag_size
      startVal [time (s)] = 0
      syncScreenRefresh = True
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Flow
  Routine Init
  LoopInitiator Trial_Loop loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine Pre_trial_Fixate
    Routine Trial
  LoopTerminator Trial_Loop
  Routine Cleanup
